# Generated by Configurator on Thu Aug 28 10:59:14 CST 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,EVA_NDE_Grbl-Hub,EVA_NDE_Grbl,EVA_NDE_Grbl-Hub
Device,XYStage,EVA_NDE_Grbl,XYStage
Device,PicoHub,EVA_NDE_PicoCamera,PicoHub
Device,PicoCam,EVA_NDE_PicoCamera,PicoCam

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,EVA_NDE_Grbl-Hub,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,XYStage,EVA_NDE_Grbl-Hub
Parent,PicoCam,PicoHub

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,PicoCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Command
# Preset: NewPreset
ConfigGroup,Command,NewPreset,EVA_NDE_Grbl-Hub,Command,


# Group: SignalGenerator Mode
# Preset: RAMP DOWN
ConfigGroup,SignalGenerator Mode,RAMP DOWN,PicoCam,SignalGenerator Mode,RAMP DOWN

# Preset: SINE
ConfigGroup,SignalGenerator Mode,SINE,PicoCam,SignalGenerator Mode,SINE

# Preset: SINC
ConfigGroup,SignalGenerator Mode,SINC,PicoCam,SignalGenerator Mode,SINC

# Preset: HALF SINE
ConfigGroup,SignalGenerator Mode,HALF SINE,PicoCam,SignalGenerator Mode,HALF SINE

# Preset: GAUSSIAN
ConfigGroup,SignalGenerator Mode,GAUSSIAN,PicoCam,SignalGenerator Mode,GAUSSIAN

# Preset: RAMP UP
ConfigGroup,SignalGenerator Mode,RAMP UP,PicoCam,SignalGenerator Mode,RAMP UP

# Preset: OFF
ConfigGroup,SignalGenerator Mode,OFF,PicoCam,SignalGenerator Mode,OFF

# Preset: DC VOLTAGE
ConfigGroup,SignalGenerator Mode,DC VOLTAGE,PicoCam,SignalGenerator Mode,DC VOLTAGE

# Preset: TRIANGLE
ConfigGroup,SignalGenerator Mode,TRIANGLE,PicoCam,SignalGenerator Mode,TRIANGLE

# Preset: AWG WAVEFORM
ConfigGroup,SignalGenerator Mode,AWG WAVEFORM,PicoCam,SignalGenerator Mode,AWG WAVEFORM

# Preset: SQUARE
ConfigGroup,SignalGenerator Mode,SQUARE,PicoCam,SignalGenerator Mode,SQUARE


# Group: SampleLength
# Preset: NewPreset
ConfigGroup,SampleLength,NewPreset,PicoCam,SampleLength,512


# Group: Channel B
# Preset: ON
ConfigGroup,Channel B,ON,PicoCam,Channel B,ON

# Preset: OFF
ConfigGroup,Channel B,OFF,PicoCam,Channel B,OFF


# Group: InputRange B
# Preset: 200
ConfigGroup,InputRange B,200,PicoCam,InputRange B,200

# Preset: 50
ConfigGroup,InputRange B,50,PicoCam,InputRange B,50

# Preset: 2000
ConfigGroup,InputRange B,2000,PicoCam,InputRange B,2000

# Preset: 500
ConfigGroup,InputRange B,500,PicoCam,InputRange B,500

# Preset: 20000
ConfigGroup,InputRange B,20000,PicoCam,InputRange B,20000

# Preset: 5000
ConfigGroup,InputRange B,5000,PicoCam,InputRange B,5000

# Preset: 100
ConfigGroup,InputRange B,100,PicoCam,InputRange B,100

# Preset: 1000
ConfigGroup,InputRange B,1000,PicoCam,InputRange B,1000

# Preset: 10000
ConfigGroup,InputRange B,10000,PicoCam,InputRange B,10000


# Group: Channel A
# Preset: ON
ConfigGroup,Channel A,ON,PicoCam,Channel A,ON

# Preset: OFF
ConfigGroup,Channel A,OFF,PicoCam,Channel A,OFF


# Group: InputRange A
# Preset: 200
ConfigGroup,InputRange A,200,PicoCam,InputRange A,200

# Preset: 50
ConfigGroup,InputRange A,50,PicoCam,InputRange A,50

# Preset: 2000
ConfigGroup,InputRange A,2000,PicoCam,InputRange A,2000

# Preset: 500
ConfigGroup,InputRange A,500,PicoCam,InputRange A,500

# Preset: 20000
ConfigGroup,InputRange A,20000,PicoCam,InputRange A,20000

# Preset: 5000
ConfigGroup,InputRange A,5000,PicoCam,InputRange A,5000

# Preset: 100
ConfigGroup,InputRange A,100,PicoCam,InputRange A,100

# Preset: 1000
ConfigGroup,InputRange A,1000,PicoCam,InputRange A,1000

# Preset: 10000
ConfigGroup,InputRange A,10000,PicoCam,InputRange A,10000


# Group: SingalGenerator Frequency
# Preset: NewPreset
ConfigGroup,SingalGenerator Frequency,NewPreset,PicoCam,SignalGenerator Frequency,1


# Group: SampleOffset
# Preset: NewPreset
ConfigGroup,SampleOffset,NewPreset,PicoCam,SampleOffset,0


# Group: TimeIntervalNs
# Preset: NewPreset
ConfigGroup,TimeIntervalNs,NewPreset,PicoCam,TimeIntervalNs,2


# Group: SignalGenerator Peak2Peak
# Preset: NewPreset
ConfigGroup,SignalGenerator Peak2Peak,NewPreset,PicoCam,SignalGenerator Peak2Peak,3.2000


# Group: Timebase
# Preset: NewPreset
ConfigGroup,Timebase,NewPreset,PicoCam,Timebase,2


# Group: ExternalTrigger
# Preset: ON
ConfigGroup,ExternalTrigger,ON,PicoCam,ExternalTrigger,ON

# Preset: OFF
ConfigGroup,ExternalTrigger,OFF,PicoCam,ExternalTrigger,OFF



# PixelSize settings

